Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img4.png % % B B 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img8.png % % C C 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img7.png % % D D 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img5.png % % E E 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img6.png % % F F 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img2.png % % G G 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img9.png % % H H 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img1.png % % I I 1 E:/Universidad%20-%20Bioingenieria/Proyecto%20Final/Cognitask/terapia/Rompecabezas/C1/C1-N1/figura%20geometrica%20simple%20I/img3.png % % // speller target properties